PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = AuditoryANT
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = $iti + 0.1 +0.4 + 1.7
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.2
      text = +
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    SoundComponent target
      sound [set every repeat] = $target_file
      startVal [time (s)] = $iti+0.1+0.4
      stopVal [duration (s)] = 1.7
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = $iti
      stopVal [duration (s)] = 1.7
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import random

        min_iti = 0.4
        max_iti = 1.6

        iti = 0.4 + np.random.rand(1) * 1.2

        thisExp.addData('iti', iti)
    SoundComponent orienting_cue
      sound [set every repeat] = $cue_file
      startVal [time (s)] = $iti
      stopVal [duration (s)] = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:24
    conditionsFile = audio_files/conditions.csv
    loopType = random
    nReps = 4
    random seed = 42
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    conditions:
      [OrderedDict([('block', 1.0), ('target_word', 'low'), ('target_pitch', 'LP'), ('cue_type', 'alerting'), ('cue_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/alerting_cue.wav'), ('target_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/low_LP_left.wav'), ('correct_resp', 'down'), ('ear', 'left')]),
      OrderedDict([('block', None), ('target_word', 'low'), ('target_pitch', 'LP'), ('cue_type', 'alerting'), ('cue_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/alerting_cue.wav'), ('target_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/low_LP_right.wav'), ('correct_resp', 'down'), ('ear', 'right')]),
      OrderedDict([('block', 1.0), ('target_word', 'low'), ('target_pitch', 'LP'), ('cue_type', 'orienting'), ('cue_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/orienting_left.wav'), ('target_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/low_LP_left.wav'), ('correct_resp', 'down'), ('ear', 'left')]),
      OrderedDict([('block', None), ('target_word', 'low'), ('target_pitch', 'LP'), ('cue_type', 'orienting'), ('cue_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/orienting_right.wav'), ('target_file', '/Users/nathanchang/Desktop/San_Diego_Tinnitus/audio_files/low_LP_right.wav'), ('correct_resp', 'down'), ('ear', 'right')])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
    Routine trial
  LoopTerminator trials
