PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = 2back_diagram
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent trialCode
      Code Type = Py
      Before Experiment:
        import random, os

        # ── PARAMETERS ──────────────────────────────────────────────
        letters       = ['A', 'B', 'C', 'D', 'E']   # one .wav per letter
        audio_folder  = os.path.join(os.getcwd(), 'audio')                  # folder holding the wavs
        nBack         = 2
        nTrials       = 15
        match_prob    = 0.30                        # 30 % 2‑back matches
        # ── LISTS ───────────────────────────────────────────────────
        stimList      = []      # letter for each trial
        corrAnsList   = []      # 'space' (target) or 'none' (no‑press)
        total_correct = []      # 1 / 0 per trial
        rts           = []      # RT or None per trial
        # ── BUILD SEQUENCE ─────────────────────────────────────────
        for i in range(nTrials):
            if i < nBack:                          # first 2 trials → random, no target
                letter = random.choice(letters)
                stimList.append(letter)
                corrAnsList.append('none')
            else:
                if random.random() < match_prob:   # force a 2‑back match
                    letter = stimList[i - nBack]
                    stimList.append(letter)
                    corrAnsList.append('space')
                else:                              # force a non‑match
                    pool = [l for l in letters if l != stimList[i - nBack]]
                    letter = random.choice(pool)
                    stimList.append(letter)
                    corrAnsList.append('none')
      Begin Routine:
        # Audio file for this trial
        thisSound = os.path.join(audio_folder, stimList[trials.thisN] + '.wav')

        # Expected correct key for this trial
        correctAns = corrAnsList[trials.thisN]
      End Routine:
        # What did the participant press?
        resp_key = key_resp.keys[0] if key_resp.keys else 'none'

        # Correct / Incorrect
        if resp_key == correctAns:
            total_correct.append(1)
        else:
            total_correct.append(0)

        # Reaction time
        rts.append(key_resp.rt[0] if key_resp.keys else None)

        # ─── Save one row per trial ───────────────────────────────────────────
        thisExp.addData('trial',        trials.thisN)
        thisExp.addData('stim',         stimList[trials.thisN])                 # letter
        thisExp.addData('soundFile',    thisSound)                              # full path
        thisExp.addData('corrAns',      correctAns)                             # 'space' or 'none'
        thisExp.addData('respKey',      key_resp.keys[0] if key_resp.keys else 'none')
        thisExp.addData('rt',           key_resp.rt[0] if key_resp.keys else '')  # blank if no key
        thisExp.addData('correct',      total_correct[-1])                      # 1 / 0 you appended
        thisExp.nextEntry()                                                 # write the row
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    SoundComponent sound_stim
      sound [set every repeat] = $thisSound
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = False
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    TextComponent fixation2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      text = +
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  Routine feedback
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        accuracy = 100 * sum(total_correct) / len(total_correct)
        valid_rts = [rt for rt in rts if rt is not None]
        mean_rt = sum(valid_rts)/len(valid_rts) if valid_rts else None

        if mean_rt:
            feedback_text = (
                f"Accuracy: {accuracy:.1f}%\n"
                f"Avg RT: {mean_rt:.3f} s"
            )
        else:
            feedback_text = f"Accuracy: {accuracy:.1f}%"
      End Routine:
        # Declare global variable first!
        # Set the text component with the generated feedback
        #text.setText(feedback_text)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $feedback_text
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 15
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    Routine trial
  LoopTerminator trials
  Routine feedback
